PsychoPy2experiment version="1.82.00"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = psychopytest
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.1
      startVal [time (s)] = 0.0
    PolygonComponent polygon
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = .1
      size = [0.5, 0.5]
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Flow
  Routine trial
